PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920,1080]
  color = black
  expName = SVO
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Routines
  Routine welcome_2
    TextComponent IntroText_2
      letterHeight = 0.04
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Your decisions will yield money for both yourself and the other person. In the example below, a person has chosen to distribute money so that he/she receives 50 dollars, while the anonymous other person receives 40 dollars.

        There are no right or wrong answers, this is all about personal preferences. After you have made your decision, the resulting distribution will apear on the spaces on the right. As you can see, your choices will influence both the amount of money you receive as well as the amount of money the other receives.
    SliderComponent slider_1
      forceEndRoutine = False
      granularity = .5
      initVal = 5
      letterHeight = 0.05
      pos = (0, -.12)
      readOnly = True
      size = (1.0, 0.15)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        from psychopy.visual.slider import Slider
        from psychopy.visual.line import Line

        # Adjust the marker size (smaller = less than default 0.05)
        slider_1.marker.size = 0.04

        tick_xpos = [-.5, -.375, -.25, -.125, 0, .125, .25, .375, .5]
        midpoints = []
        slider_ypos = slider_1.pos[1]
        for i in range(len(tick_xpos)-1):
            midpoint = (tick_xpos[i] + tick_xpos[i+1]) / 2
            midpoints.append(midpoint)

        line_pos = []
        for x in midpoints:
            line = Line(
                win,
                start = (x , slider_ypos -.04),
                end = (x , slider_ypos +.04),
                lineColor = 'gray',
                lineWidth = 6,
                autoDraw = True
            )
            line_pos.append(line)
      Each Frame:
        slider_1.getMarkerPos()
    TextComponent IntroText_3
      letterHeight = 0.04
      pos = (0, -.43)
      startVal [time (s)] = 0.0
      text = Press SPACE to begin
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    TextboxComponent YouReceiveText_1
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.5, 0.08)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  30
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    TextboxComponent YouReceiveText_2
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.375, 0.08)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  35
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    TextboxComponent YouReceiveText_3
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.125, 0.08)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  40
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    TextboxComponent YouReceiveText_4
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.25, 0.08)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  45
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    TextboxComponent YouReceiveText_5
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (0, 0.08)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  50
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    TextboxComponent YouReceiveText_6
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.25, 0.08)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  55
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    TextboxComponent YouReceiveText_7
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.125, 0.08)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  60
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    TextboxComponent YouReceiveText_8
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.375, 0.08)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  65
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    TextboxComponent YouReceiveText_9
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.5, 0.08)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  70
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    TextboxComponent OtherReceiveText_1
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.5, -.18)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  80
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    TextboxComponent OtherReceiveText_2
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.375, -.18)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  70
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    TextboxComponent OtherReceiveText_3
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.125, -.18)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  60
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    TextboxComponent OtherReceiveText_4
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.25, -.18)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  50
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    TextboxComponent OtherReceiveText_5
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (0, -.18)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  40
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    TextboxComponent OtherReceiveText_6
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.25, -.18)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  30
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    TextboxComponent OtherReceiveText_7
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.125, -.18)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  20
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    TextboxComponent OtherReceiveText_8
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.375, -.18)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  10
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    TextboxComponent OtherReceiveText_9
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.5, -.18)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =   0
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    TextComponent YouReceiveText
      letterHeight = 0.04
      pos = (-.72, 0.08)
      startVal [time (s)] = 0.0
      text = You receive
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    TextComponent OtherReceiveText
      letterHeight = 0.04
      pos = (-.72, -.18)
      startVal [time (s)] = 0.0
      text = Other receives
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    TextComponent YouDistribution
      letterHeight = 0.035
      pos = (.65, 0.08)
      startVal [time (s)] = 0.0
      text = You
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    TextComponent OtherDistribution
      letterHeight = 0.03
      pos = (.65, -.18)
      startVal [time (s)] = 0.0
      text = Other
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    PolygonComponent TaskOutline
      fillColor = grey
      lineWidth = 4
      opacity = .2
      pos = (-.15, -.05)
      saveStartStop = False
      shape = rectangle
      size = (1.43, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent You_Amount_Text
      letterHeight = 0.07
      pos = (.75, 0.08)
      startVal [time (s)] = 0.0
      text = 50
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    TextComponent Other_Amount_Text
      letterHeight = 0.07
      pos = (.75, -.18)
      startVal [time (s)] = 0.0
      text = 40
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  Routine welcome_3
  Routine welcome_1
    TextComponent IntroText_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        INSTRUCTIONS

        In this task you have been randomly paired with another person, whom we will refer to as the other. This other person is someone you do not know and will remain mutually anonymous. All of your choices are completely confidential. You will be making a series of decisions about allocating resources between you and this other person.

        Press SPACE to continue
    KeyboardComponent IntroKey_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome_1
  Routine welcome_2
  Routine welcome_3
